# Instrument driver configuration file.

#
# out_timeout
# out_falling    enable_start_detected
# out_raising    enable_end_detected   
# out_falling_s  enable_start_s
# out_enabled_s  enable_s
#
# Out -> Measurement

[General settings]
# The name is shown in all the configuration windows
name: ad_low_noise_float_2023

# The version string should be updated whenever changes are made to this config file

version: 1.0.0

interface: None

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: ad_driver

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
# [Config / Name]
# datatype: STRING
# def_value: ?
# permission: READ
# 
# [Config / Axis]
# datatype: COMBO
# def_value: AXIS2
# combo_def_1: AXIS2
# combo_def_2: AXIS3
# permission: READ

[Logging Driver]
datatype: COMBO
def_value: DEBUG
combo_def_1: DEBUG
combo_def_2: INFO
combo_def_3: WARNING
group: Logging

[Logging AD]
datatype: COMBO
def_value: DEBUG
combo_def_1: DEBUG
combo_def_2: INFO
combo_def_3: WARNING
group: Logging

[duration_max_s]
datatype: DOUBLE
def_value: 3
low_lim: 0.1
group: Configuration

[sample_rate_SPS]
datatype: COMBO
def_value: SPS_97656
combo_def_1: SPS_97656
combo_def_2: SPS_48828
combo_def_3: SPS_24414
combo_def_4: SPS_12207
combo_def_5: SPS_06104
combo_def_6: SPS_03052
group: Configuration

[Input range]
datatype: DOUBLE
unit: V
def_value: 0.001
permission: READ
group: Connected Hardware

[IN_t]
unit: 1
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Measurement

[IN_disable]
unit: 1
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Measurement

[IN_voltage]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Measurement

[timeout_detected]
datatype: BOOLEAN
def_value: False
permission: READ
group: Measurement

[enable_start_detected]
datatype: BOOLEAN
def_value: False
permission: READ
group: Measurement

[enable_end_detected]
datatype: BOOLEAN
def_value: False
permission: READ
group: Measurement

[enable_start_s]
datatype: DOUBLE
def_value: 0.0
permission: READ
group: Measurement

[enable_s]
datatype: DOUBLE
def_value: 0.0
permission: READ
group: Measurement

# [Control / Mode]
# datatype: COMBO
# def_value: PASSIVE
# combo_def_1: PASSIVE
# combo_def_2: RAMPING_WAIT
# 
# [Control / Labber State]
# datatype: COMBO
# def_value: MISALIGNED
# combo_def_1: RAMPING
# combo_def_2: HOLDING
# combo_def_3: PAUSED
# combo_def_4: IDLE
# combo_def_5: MISALIGNED
# combo_def_6: ERROR
# 
# [Control / Field Setpoint X]
# datatype: DOUBLE
# unit: T
# def_value: 0.0
# x_name: Magnetic field
# x_unit: T
# state_quant: Config / Axis
# state_value_1:AXIS3
# 
# [Control / Field Setpoint Y]
# datatype: DOUBLE
# unit: T
# def_value: 0.0
# x_name: Magnetic field
# x_unit: T
# 
# [Control / Field Setpoint Z]
# datatype: DOUBLE
# unit: T
# def_value: 0.0
# x_name: Magnetic field
# x_unit: T
# 
# [Control / Hold Switchheater on Z]
# datatype: COMBO
# def_value: True
# combo_def_1: False
# combo_def_2: True
# 
# [Control / Hold Current Z]
# datatype: COMBO
# def_value: True
# combo_def_1: False
# combo_def_2: True
# 
# [Control / Ramp Rate X]
# datatype: DOUBLE
# unit: T / s
# def_value: 0.01
# state_quant: Config / Axis
# state_value_1:AXIS3
# 
# [Control / Ramp Rate Y]
# datatype: DOUBLE
# unit: T / s
# def_value: 0.01
# 
# [Control / Ramp Rate Z]
# datatype: DOUBLE
# unit: T / s
# def_value: 0.01
# 
# [Status / Switchheater Status Z]
# datatype: COMBO
# def_value: OFF
# combo_def_1: OFF
# combo_def_2: ON
# 
# [Status / Field actual X]
# datatype: DOUBLE
# unit: T
# def_value: 0.0
# permission: READ
# state_quant: Config / Axis
# state_value_1:AXIS3
# 
# [Status / Field actual Y]
# datatype: DOUBLE
# unit: T
# def_value: 0.0
# permission: READ
# 
# [Status / Field actual Z]
# datatype: DOUBLE
# unit: T
# def_value: 0.0
# permission: READ
# 
# [Status / Magnet State X]
# datatype: COMBO
# def_value: UNDEFINED
# combo_def_1: RAMPING
# combo_def_2: HOLDING
# combo_def_3: PAUSED
# combo_def_4: MANUAL_UP
# combo_def_5: MANUAL_DOWN
# combo_def_6: ZEROING_CURRENT
# combo_def_7: QUENCH_DETECTED
# combo_def_8: AT_ZERO_CURRENT
# combo_def_9: HEATING_SWITCH
# combo_def_10: COOLING_SWITCH
# combo_def_11: UNDEFINED
# permission: READ
# state_quant: Config / Axis
# state_value_1:AXIS3
# 
# [Status / Magnet State Y]
# datatype: COMBO
# def_value: UNDEFINED
# combo_def_1: RAMPING
# combo_def_2: HOLDING
# combo_def_3: PAUSED
# combo_def_4: MANUAL_UP
# combo_def_5: MANUAL_DOWN
# combo_def_6: ZEROING_CURRENT
# combo_def_7: QUENCH_DETECTED
# combo_def_8: AT_ZERO_CURRENT
# combo_def_9: HEATING_SWITCH
# combo_def_10: COOLING_SWITCH
# combo_def_11: UNDEFINED
# permission: READ
# 
# [Status / Magnet State Z]
# datatype: COMBO
# def_value: UNDEFINED
# combo_def_1: RAMPING
# combo_def_2: HOLDING
# combo_def_3: PAUSED
# combo_def_4: MANUAL_UP
# combo_def_5: MANUAL_DOWN
# combo_def_6: ZEROING_CURRENT
# combo_def_7: QUENCH_DETECTED
# combo_def_8: AT_ZERO_CURRENT
# combo_def_9: HEATING_SWITCH
# combo_def_10: COOLING_SWITCH
# combo_def_11: UNDEFINED
# permission: READ
