# Instrument driver configuration file.

# This is a driver for
# <this_repo>/testsetup_labber

[General settings]

# The name is shown in all the configuration windows
name: ad_low_noise_float_2023_stimuli

# The version string should be updated whenever changes are made to this config file
version: 1.0

interface: None

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: stimuli_driver

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
[Logging]
datatype: COMBO
def_value: DEBUG
combo_def_1: DEBUG
combo_def_2: INFO
combo_def_3: WARNING

[Synchron]
datatype: COMBO
def_value: ASYNCHRON
combo_def_1: ASYNCHRON
combo_def_2: SYNCHRON_DEBUG
combo_def_3: VALIDATE_DEBUG


[Scenario]
datatype: DOUBLE
unit: idx
def_value: 0.0
